PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 640]
  expName = delay discounting (AU2120059)
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or " + "GBP  " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = discounting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 31, 'future_reward': 87, 'delay': 86},
      {'reward_today': 24, 'future_reward': 89, 'delay': 112},
      {'reward_today': 48, 'future_reward': 85, 'delay': 95},
      {'reward_today': 45, 'future_reward': 100, 'delay': 2},
      {'reward_today': 20, 'future_reward': 89, 'delay': 2},
      {'reward_today': 27, 'future_reward': 94, 'delay': 200},
      {'reward_today': 29, 'future_reward': 74, 'delay': 60},
      {'reward_today': 49, 'future_reward': 87, 'delay': 109},
      {'reward_today': 65, 'future_reward': 89, 'delay': 149},
      {'reward_today': 29, 'future_reward': 86, 'delay': 79},
      {'reward_today': 45, 'future_reward': 100, 'delay': 24},
      {'reward_today': 59, 'future_reward': 98, 'delay': 97},
      {'reward_today': 43, 'future_reward': 90, 'delay': 27},
      {'reward_today': 57, 'future_reward': 74, 'delay': 7},
      {'reward_today': 37, 'future_reward': 98, 'delay': 110},
      {'reward_today': 38, 'future_reward': 72, 'delay': 55},
      {'reward_today': 23, 'future_reward': 91, 'delay': 50},
      {'reward_today': 54, 'future_reward': 76, 'delay': 185},
      {'reward_today': 30, 'future_reward': 90, 'delay': 167},
      {'reward_today': 36, 'future_reward': 87, 'delay': 56}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
    Routine trial
  LoopTerminator trials
