PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = solo test
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent stim_text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
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      text [set every repeat]:
        $condition
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine instructions
    TextComponent ins_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        You will be shown a set of arrows after the triangle
    TextComponent ins_text1
      letterHeight = 0.04
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 5.0
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      text:
        Press LEFT ARROW KEY if the centre arrow is pointing towards left
        Press RIGHT ARROW KEY if the centre arrow is pointing towards right
    PolygonComponent fixation
      fillColor = white
      shape = triangle
      size = (0.05, 0.05)
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 1.5
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = solo report data (final).xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'},
      {'condition': '>>>>>', 'type': 'cong', 'corr_resp': 'right'}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
    Routine trial
  LoopTerminator trials
